OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  The first EEG file to be added
  (change the file in the stream reader)
Comment
  The second EEG file to be added
  (change the file in the stream reader)
Comment
  The EEG data file to be written that is the concatenation of both input EEG data file (EEG data file 1 and EEG data file 2)
  (change the file in the stream writter to specify the name and location of this file)

EEG data file 1 reader => #0
  Filename = /home/jfrey/flow/analyses/data/4/nomus/motor-imagery-csp-4-online-adapt-[2016.08.10-10.16.16]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#0.Stimulations -> Stimulation Filter => #1
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_EndOfFile
  Stimulation range end = OVTK_StimulationId_EndOfFile
EEG data file 2 reader => #2
  Filename = /home/jfrey/flow/analyses/data/4/nomus/motor-imagery-csp-4-online-adapt-[2016.08.10-10.20.55]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#2.Stimulations -> Stimulation Filter => #3
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_EndOfFile
  Stimulation range end = OVTK_StimulationId_EndOfFile
EEG data file 3 reader => #4
  Filename = /home/jfrey/flow/analyses/data/4/nomus/motor-imagery-csp-4-online-adapt-[2016.08.10-10.24.56]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#4.Stimulations -> Stimulation Filter => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_EndOfFile
  Stimulation range end = OVTK_StimulationId_EndOfFile
EEG data file 4 reader => #6
  Filename = /home/jfrey/flow/analyses/data/4/nomus/motor-imagery-csp-4-online-adapt-[2016.08.10-10.28.55]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#6.Stimulations -> Stimulation Filter => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_EndOfFile
  Stimulation range end = OVTK_StimulationId_EndOfFile
EEG data file 5 reader => #8
  Filename = /home/jfrey/flow/analyses/data/4/nomus/motor-imagery-csp-4-online-adapt-[2016.08.10-10.33.51]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#8.Stimulations -> Stimulation Filter => #9
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_EndOfFile
  Stimulation range end = OVTK_StimulationId_EndOfFile
EEG data file 6 reader => #10
  Filename = /home/jfrey/flow/analyses/data/4/nomus/motor-imagery-csp-4-online-adapt-[2016.08.10-10.38.22]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
Input signal 1=#0.EEG stream, Input stimulations 1=#1, Input signal 2=#2.EEG stream, Input stimulations 2=#3, Input signal 3=#4.EEG stream, Input stimulations 3=#5, Input signal 4=#6.EEG stream, Input stimulations 4=#7, Input signal 5=#8.EEG stream, Input stimulations 5=#9, Input signal 6=#10.EEG stream, Input stimulations 6=#10.Stimulations -> Signal Concatenation => #11
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 3 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 4 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 5 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 6 = OVTK_StimulationId_ExperimentStop
#11.Status -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
Signal=#11.Signal, Stimulation=#11.Stimulations -> 0xc67a01dc GDF file writer "Concatenated EEG data file writer"
  Filename = /home/jfrey/flow/analyses/data/4_nomus.gdf
