OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Concatenating two files, supposedly recorded during the calibration of a MI task with stimulation analogous to Graz protocol.

  Caution: chunk size should be a divider of frequency!

GDF file reader 1 => #0
  Filename = ${User_InputDataset_1}
  Samples per buffer = 4
  Subtract physical minimum = false
#0.Stimulations -> Stimulation Filter "remove train"
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Train
  Stimulation range end = OVTK_StimulationId_Train
-> Stimulation Filter "remove experiment stop" => #2
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_ExperimentStop
  Stimulation range end = OVTK_StimulationId_ExperimentStop
GDF file reader 2 => #3
  Filename = ${User_InputDataset_2}
  Samples per buffer = 4
  Subtract physical minimum = false
#3.Stimulations -> Stimulation Filter "remove experiment start" => #4
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_ExperimentStart
  Stimulation range end = OVTK_StimulationId_ExperimentStart
Input signal 1=#0.EEG stream, Input stimulations 1=#2, Input signal 2=#3.EEG stream, Input stimulations 2=#4 -> Signal Concatenation => #5
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_EndOfFile
  End-of-file stimulation for input 2 = OVTK_StimulationId_EndOfFile
Signal=#5.Signal, Stimulation=#5.Stimulations -> GDF file writer
  Filename = ${User_OutputSignal}
#5.Stimulations -> 0x341d3912 0xc73e83ec Stimulation listener
  Log level to use = Information
#5.Status -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
