OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

GDF file reader => #0
  Filename = ${User_Signal}
  Samples per buffer = 4
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 5.0
  High cut frequency (Hz) = 8.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/frequencyBandSelected.cfg
CSV File Reader => #3
  Filename = ${User_TrainFold}
  Column separator = ;
  Don't use the file time = false
   = 0
Input stream 1=#2, Input stream 2=#3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
  0x8d21ff41 = ${Player_ScenarioDirectory}/epoching_left.cfg
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Right trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
  0x8d21ff41 = ${Player_ScenarioDirectory}/epoching_right.cfg
Stimulations=#4.Output stream 2, Signal condition 1=#5, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${User_Model}_csp.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
