OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used to replay online sessions.
  The scenario displays the classification confusion matrix,
  along with the global performance evolving during the sessions.

  With this scenario, you can watch the performance of the classifier
  during time, and for each class.
Comment
  Here we want to classify only during trials. This is achieved by
  a simple lua script and a stream switch.

  The Switch Director is a Lua scripting box
  that controls a Stream Switch box.
  When an instruction is received (OVTK_StimulationId_Right / Left)
  the switch director tells the stream switch to redirect
  its signal input to the first output (i.e. routed to a classifier).
  Otherwise, the feature input is redirected to the second output,
  i.e. nothing.

  NB: match epoch values with other scripts!
  (but does not handle negative offset...)
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  The Confusion Matrix computation needs
  the instruction flow, and the classification flow
  to compare them, for each class.

  As the instructions (OVTK_StimulationId_Left and _Right)
  are included in the stimulation stream, we need to filter
  away the other information in it with Stimulation Filter.

  Same goes for the Classifier Accuracy Measure that
  computes the global performance of the classifier.
Comment
  Finally, the feature vectors are classified with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

  So for instance, if you want to replace the LDA
  with a SVM classifier, you will have to shift the value by -0.5
  with the simple DSP. Indeed, SVM outputs values from 0 to 1.

CSV File Reader => #0
  Filename = ${User_TestFold}
  Column separator = ;
  Don't use the file time = false
   = 0
-> Switch director => #1
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-epoch-selector.lua
  offset = 0
  duration = 3
GDF file reader => #2
  Filename = ${User_Signal}
  Samples per buffer = 4
  Subtract physical minimum = false
#2.EEG stream -> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 13.0
  High cut frequency (Hz) = 15.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/frequencyBandSelected.cfg
Triggers=#1, Matrix=#4 -> Stream Switch => #5
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#5.Output -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${User_Model}_csp.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${User_Model}_classifier.xml
#12.Probability values -> Simple DSP - inverse => #13
  Equation = (x-0.5)*(-2)
input0=#0, input1=#13 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier_vidaurre.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  Debug = false
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_GDF_AEP
  Class Run stop = OVTK_StimulationId_Train
  Performance computations = true
  Performance data = ${Perf_File}
  Accuracy data = ${Player_ScenarioDirectory}/signals/concatenated_training_metrics.xml
  Performance backup = ${Perf_File}
  Class A collection = OVTK_StimulationId_Label_08
  Class B collection = OVTK_StimulationId_Label_04
  Class A collection star = OVTK_StimulationId_Label_07
  Class B collection star = OVTK_StimulationId_Label_08
  Center = false
  Adapt = false
  Bias negative = true
  Fake output = false
Input stream 1=#2.EEG stream, Input stream 2=#0 -> Identity => #15
#15.Output stream 2 -> Stimulation Filter => #16
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Right
New input=#16, New input(1)=#12.Labels -> Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/vote.lua
  Output file = ${User_Prediction}
Input stimulations 1=#12.Labels, Input stimulations 2=#15.Output stream 2 -> Stimulation multiplexer
-> 0x341d3912 0xc73e83ec Stimulation listener
  Log level to use = Information
#15.Output stream 1 -> Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
