OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = ${User_InputDataset}
Data=#0.Output stream 1, Stimulations=#0.Output stream 2 -> 0x341d3912 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Output stream 2 -> 0x341d3912 0xc73e83ec Stimulation listener
  Log level to use = Information
#0.Output stream 1 -> Generic stream writer
  Filename = ${User_OutputSignal}
  Use compression = false
#0.Output stream 2 -> CSV File Writer
  Filename = ${User_OutputLabels}
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Timeout
  Timeout delay = 2
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
