OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

Generic stream reader
  Filename = ${User_Signal}
-> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
CSV File Reader => #2
  Filename = ${User_TrainFold}
  Column separator = ;
  Don't use the file time = false
   = 0
Input stream 1=#1, Input stream 2=#2 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#3.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_GDF_End_Of_Session
  Spatial filter configuration = ${User_Model}_csp.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
