OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.

Acquisition client => #0
  Acquisition server hostname = 193.50.110.71
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "exchange 5-7 and 10-24 and 20-21"
  Channel List = 1:4;7;6;5;8;9;24;11:19;21;20;22;23;10;25:35
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Channel Selector "17:32" => #4
  Channel List = 17:32
  Action = Select
  Channel Matching Method = Smart
Data=#4 -> Signal display "17:32"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Channel Selector "1:16" => #6
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Data=#6 -> Signal display "1:16"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
