OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  Using Tux instead of graz...

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/signals/).
Comment
  Tux must be started beforehand so that
  LSL stimulations can be read!
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment
Comment
  To magical joystick script

LSL stim reader => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
input0=#0 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier_vidaurre.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_Train
  Performance computations = false
  Performance data = ${Player_ScenarioDirectory}/signals/run_perfs.cfg
  Accuracy data = ${Player_ScenarioDirectory}/signals/concatenated_training_metrics.xml
  Performance backup = ${Player_ScenarioDirectory}/signals/run_perfs_[$core{date}-$core{time}].cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
  Class A collection star = OVTK_StimulationId_Label_07
  Class B collection star = OVTK_StimulationId_Label_08
  Center = false
  Adapt = false
  Bias negative = true
  Fake output = true
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal average => #3
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#3 -> Channel Selector "biaised classifier"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Crop => #6
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
Input signal=#6 -> LSL Export
  Signal stream = hyperplane
  Marker stream = openvibeMarkers
#0 -> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Acquisition client => #9
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#9.Signal stream -> Channel Rename => #10
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
  0x8d21ff41 = ${Player_ScenarioDirectory}/acticap_channels_name.cfg
-> Temporal filter => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Channel Selector "1:16" => #12
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Data=#12 -> Signal display "1:16"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#11 -> Channel Selector "17:32" => #14
  Channel List = 17:32
  Action = Select
  Channel Matching Method = Smart
Data=#14 -> Signal display "17:32"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stimulations 1=#0, Input stimulations 2=#9.Stimulations -> Stimulation multiplexer => #16
Experiment information=#9.Experiment information, Signal=#10, Stimulation=#16 -> GDF file writer EEG
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}]_EEG.gdf
Experiment information=#9.Experiment information, Signal=#6, Stimulation=#16 -> GDF file writer class
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}]_fake.gdf
