OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 40
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#0 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Acquisition client => #3
  Acquisition server hostname = 193.50.110.71
  Acquisition server port = 1024
#3.Signal stream -> Channel Selector "exchange 5-7 and 10-24 and 20-21"
  Channel List = 1:4;7;6;5;8;9;24;11:19;21;20;22;23;10;25:35
  Action = Select
  Channel Matching Method = Smart
#3.Signal stream -> Channel Rename => #5
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
Input stream 1=#3.Experiment information, Input stream 2=#5, Input stream 3=#0 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].ov
  Use compression = false
