OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

Generic stream reader => #0
  Filename = /home/flow/flow/script-openVibe/signals/motor-imagery-csp-1-acquisition-[2016.08.04-18.23.33].ov
#0.Output stream 2 -> 0xc67a01dc Channel Selector "exchange 5-7 and 10-24 and 20-21"
  Channel List = 1:4;7;6;5;8;9;24;11:19;21;20;22;23;10;25:35
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Channel Selector "!33:35"
  Channel List = 33:35
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#4, Input stream 2=#0.Output stream 3 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Left trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Right trials" => #7
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#5.Output stream 2, Signal condition 1=#6.Epoched signal, Signal condition 2=#7.Epoched signal -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
