OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition or 4-online and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  When the training is completed the box
  outputs a stimulation OVTK_StimulationId_TrainCompleted
  to stop the scenario through a Player Controller

Generic stream reader => #0
  Filename = /home/flow/flow/script-openVibe/signals/motor-imagery-csp-1-acquisition-[2016.08.04-18.23.33].ov
#0.Output stream 2 -> 0xc67a01dc Channel Selector "exchange 5-7 and 10-24 and 20-21"
  Channel List = 1:4;7;6;5;8;9;24;11:19;21;20;22;23;10;25:35
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Channel Selector "!33:35"
  Channel List = 33:35
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#4, Input stream 2=#0.Output stream 3 -> Identity => #5
#5.Output stream 1 -> CSP Spatial Filter => #6
  Spatial Filter Coefficients = -4.111576e-03 1.249223e-03 -1.014360e-02 1.919389e-02 5.124259e-03 -1.881663e-02 1.953352e-02 6.771930e-03 9.445210e-03 -3.030646e-02 1.266167e-01 1.895776e-02 8.085281e-03 6.415883e-02 -5.187103e-01 4.961809e-01 -1.332881e-01 -4.734837e-01 -1.185071e-02 -3.113139e-02 4.662671e-01 -2.383866e-03 -2.127977e-02 -1.323589e-02 6.961932e-03 2.198456e-02 -1.431420e-02 4.884928e-03 2.161431e-03 -1.591284e-02 -3.096427e-02 -1.171084e-02 5.348520e-04 -3.366696e-02 1.642779e-02 -4.328573e-02 -2.852324e-03 9.385152e-03 2.986681e-02 1.795242e-02 1.018149e-02 4.741065e-02 -6.494736e-02 1.035912e-02 9.968048e-03 -5.280690e-02 6.997366e-01 -3.732603e-03 2.005101e-03 -7.013220e-01 1.653432e-02 -4.726869e-03 3.952140e-02 -2.063748e-02 -1.238441e-02 1.940374e-02 -6.936740e-03 -1.160914e-02 -1.003125e-02 -7.714402e-02 -1.749021e-02 2.083726e-02 3.014275e-02 -2.403174e-02 1.329965e-02 -8.831606e-04 8.521688e-03 -1.046304e-01 3.572556e-02 6.053755e-02 -3.696174e-02 4.177252e-02 1.452981e-02 -9.598133e-03 1.513517e-02 -6.754332e-01 3.242582e-03 -1.568529e-01 6.769605e-01 -3.667082e-03 -1.975176e-02 -4.960608e-02 3.958041e-02 1.352952e-01 -5.455611e-02 8.270387e-02 -1.699130e-02 -6.414036e-03 -2.068245e-03 -6.157041e-02 1.036262e-02 1.043505e-01 -5.843045e-02 -7.621854e-02 6.004828e-02 -4.266205e-04 5.005539e-02 -5.577247e-02 -6.340528e-03 -1.152376e-03 -5.174230e-03 1.068035e-02 -3.111424e-03 -2.021707e-02 -6.918513e-01 4.719307e-03 5.120253e-02 6.926403e-01 2.048278e-02 -1.577099e-02 4.387976e-03 -3.878901e-02 4.954361e-02 -9.593469e-04 -1.902466e-02 7.656098e-03 -9.468064e-02 -4.706721e-03 7.360408e-02 3.276628e-02 2.811203e-02 4.209018e-02 -1.858624e-02 -1.459217e-02 -2.195822e-03 1.198619e-02 -1.009501e-01 5.195467e-03 -2.706832e-02 -1.887654e-04 1.367292e-02 2.413147e-04 2.709793e-02 -6.927879e-01 5.348182e-03 1.447180e-02 6.942791e-01 1.264346e-02 -1.720006e-02 3.351512e-03 -1.866654e-02 7.425655e-02 4.775271e-04 5.365199e-03 -2.840049e-02 -2.159855e-02 -4.979042e-03 6.938407e-02 2.176660e-02 5.920648e-02 -3.919152e-02 -3.706931e-02 -1.374720e-01 3.758618e-02 2.892483e-02 -5.313907e-03 -1.781610e-03 3.536401e-02 -6.878397e-03 -8.183492e-04 -6.585203e-03 2.503462e-02 -6.928313e-01 8.869424e-03 -1.057398e-02 6.950552e-01 6.550926e-03 -5.029317e-03 6.400721e-03 -1.913998e-02 -1.541461e-02 -1.171677e-02 -1.022048e-03 2.232510e-02
  Number of Output Channels = 6
  Number of Input Channels = 29
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
Input signal=#6, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Left trials" => #7
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
#7.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #12
Input signal=#6, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Right trials" => #13
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
#13.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #18
Stimulations=#5.Output stream 2, Features for class 1=#12, Features for class 2=#18 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
  Multiclass strategy to apply = OneVsAll
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Sigmoid
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
