OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  SVM output between -1 and 1
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  1 channel for orignal input
  1 channel for biased output (enables only during trials)
Comment
  Important: configure same sampling rate as signals, use a size of chunk that is compatible
  (eg chunk size 4 is a divider of sampling rate 500)
Comment
  Stims from tux

  NB: scenario will freeze until tux launches
Comment
  Both signals must have same frequency,
  and preferably same chunk size (eg for signal display).
Comment
  To magical joystick script
Comment
  adjust threshold
  in the DSP
  for left/right
  detection
Comment
  Choose same value for both
  time based epoching

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#0.Signal stream -> CSP Spatial Filter
  Spatial Filter Coefficients = -4.153162e-01 -1.419314e-01 -4.025629e-02 5.609307e-02 4.676036e-01 -9.032135e-02 -2.073081e-02 2.210412e-01 -1.989766e-02 1.580477e-01 2.940897e-03 1.399249e-02 1.982679e-01 -1.407618e-01 1.490402e-01 -5.652871e-01 1.181212e-01 1.802486e-01 1.614189e-02 -2.309378e-01 1.664799e-01 -5.694823e-01 -5.248895e-02 2.729018e-01 4.451052e-01 8.496659e-02 -1.264322e-01 2.437873e-02 3.789377e-02 2.493489e-01 8.765433e-03 -1.225017e-01 -2.940699e-01 -2.710195e-02 1.003064e-01 2.586863e-01 5.223714e-02 -2.317426e-01 -2.983528e-02 -2.204929e-01 -2.682298e-02 -1.113014e-01 -1.965612e-02 -3.303818e-01 5.517072e-01 -2.201304e-01 -5.752979e-02 1.901008e-01 -1.017623e-01 -3.944065e-01 -1.018460e-02 5.318839e-02 3.899348e-01 -9.919537e-02 3.022127e-02 2.992816e-01 -2.261103e-01 5.608258e-02 -5.454408e-02 8.127242e-02 -4.190949e-02 -1.456867e-01 -1.519458e-02 -2.878050e-01 -6.738369e-02 -1.295845e-02 5.482533e-03 1.028594e-01 -9.043416e-02 -1.841916e-01 -3.323220e-02 3.477233e-02 4.544725e-02 -3.392972e-03 -1.555216e-01 -1.084663e-02 1.159610e-02 5.670465e-02 8.908655e-01 -1.041472e-01 1.156321e-01 4.090382e-02 4.073383e-01 -5.388061e-01 -7.531635e-03 7.061634e-02 9.591012e-02 2.317455e-01 -2.762529e-02 3.678703e-01 -6.263660e-02 -2.361803e-01 -1.289539e-01 1.077220e-01 -1.654897e-01 -2.085318e-01 9.163632e-02 1.779707e-01 -3.317701e-01 -1.254098e-01 1.570931e-02 -3.080249e-03 2.222252e-01 2.469240e-02 -2.630679e-02 3.678485e-02 -2.414029e-01 3.764021e-01 1.676235e-01 -1.220075e-01 7.047528e-02 -3.717735e-01 2.607212e-01 -4.934399e-01 -4.299926e-02 -2.428984e-01 9.507944e-02 4.243386e-01 8.055953e-05 -1.321936e-02
  Number of Output Channels = 6
  Number of Input Channels = 20
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #6
Features=#6 -> Classifier processor => #7
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#7.Probability values -> Simple DSP - inverse => #8
  Equation = (x-0.5)*(-2)
LSL stim reader => #9
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
input0=#9, input1=#8 -> bias classifier adapt => #10
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier.py
  Sampling frequency = 500
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_SegmentStop
  Performance data = ${Player_ScenarioDirectory}/run_perfs.cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
-> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input 1=#0.Signal stream, Input 2=#10 -> Signal Merger => #13
#10 -> Channel Selector "biased classifier"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Crop => #15
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
Input signal=#15 -> LSL Export
  Signal stream = hyperplane
  Marker stream = openvibeMarkers
#15 -> Signal average
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Signal average => #20
Data=#20 -> Signal display "classifier output"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 60
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#20 -> Simple DSP "others"
  Equation = 0
-> Spatial Filter "bread multiplier"
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1
  Number of Output Channels = 32
  Number of Input Channels = 1
  Filter matrix file =
-> Channel Rename "Localise"
  New channel names = FP1;AF3;F7;F3;FP2;AF4;F4;F8;AFz;Fz;FCz;Cz;FC3;C5;C3;C1;CP3;FC4;C2;C4;C6;CP4;CPz;P3;Pz;P4;POz;PO3;PO4;O1;Oz;O2
-> Channel Selector "!C3;C4" => #25
  Channel List = C3;C4
  Action = Reject
  Channel Matching Method = Smart
#20 -> Simple DSP "gauche"
  Equation = x<0.2
-> Channel Rename "C4" => #27
  New channel names = C4
#20 -> Simple DSP "droite"
  Equation = x>0.2
-> Channel Rename "C3" => #29
  New channel names = C3
Input 1=#29, Input 2=#27, Input 3=#25 -> Signal Merger
-> Channel Selector "FP1;AF3;F7;F3;FP2;AF4;F4;F8;AFz;Fz;FCz;Cz;FC3;C5;C3;C1;CP3;FC4;C2;C4;C6;CP4;CPz;P3;Pz;P4;POz;PO3;PO4;O1;Oz;O2" => #31
  Channel List = FP1;AF3;F7;F3;FP2;AF4;F4;F8;AFz;Fz;FCz;Cz;FC3;C5;C3;C1;CP3;FC4;C2;C4;C6;CP4;CPz;P3;Pz;P4;POz;PO3;PO4;O1;Oz;O2
  Action = Select
  Channel Matching Method = Smart
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 16
-> Matrix Display "values to teegi"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input signal=#31 -> LSL Export (Gipsa)
  Stream name = disco_live
  Stream type = EEG
Input stimulations 1=#0.Stimulations, Input stimulations 2=#9 -> Stimulation multiplexer => #35
Input stream 1=#13, Input stream 2=#35 -> Identity => #36
Signal=#36.Output stream 1, Stimulation=#36.Output stream 2 -> 0xc73e83ec GDF file writer all
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-noadapt-[$core{date}-$core{time}].gdf
Data=#36.Output stream 1, Stimulations=#36.Output stream 2 -> 0xc73e83ec Signal display "online noadapt signal merged"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#35 -> 0xc73e83ec GDF file writer EEG
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-adapt-[$core{date}-$core{time}]_EEG.gdf
Signal=#0.Signal stream, Stimulation=#35 -> 0xc73e83ec GDF file writer class
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-adapt-[$core{date}-$core{time}]_class.gdf
