OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = 193.50.110.71
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "exchange 5-7 and 10-24 and 20-21"
  Channel List = 1:4;7;6;5;8;9;24;11:19;21;20;22;23;10;25:35
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Rename => #2
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "!"
  Channel List =
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = 7.148210e-02 6.449928e-02 4.022413e-02 -6.146611e-02 -1.199379e-01 2.614959e-02 -1.185332e-01 -1.409069e-02 8.156354e-02 5.667196e-02 1.098181e-02 -8.320952e-02 -1.408488e-01 -1.438114e-01 -1.912521e-01 3.177377e-01 -7.957554e-02 -1.085060e-01 -6.685327e-02 -5.623479e-02 4.337950e-03 7.858765e-01 -8.608185e-02 -1.113556e-01 2.352870e-02 -2.238317e-02 1.965929e-01 -1.322220e-01 -1.017246e-02 3.292895e-02 -1.742115e-01 -9.571471e-02 1.359285e-01 2.243390e-02 -5.496220e-03 -4.712053e-02 -3.206528e-02 3.737627e-02 -7.106401e-02 7.850501e-03 7.054590e-02 -8.809764e-02 -1.634107e-01 3.497614e-02 -6.267059e-02 3.199731e-01 -6.317357e-02 4.192007e-02 3.348266e-01 -5.527642e-01 2.572836e-03 4.056792e-01 -5.978497e-02 -3.595282e-01 -5.976777e-02 1.313081e-02 6.725749e-02 6.197346e-03 1.955621e-02 1.147662e-01 -5.828710e-02 2.719087e-02 1.666120e-01 -2.228883e-01 -1.347257e-01 4.692669e-03 -1.308256e-01 -6.555089e-02 2.849642e-01 4.082860e-02 -5.921916e-02 7.155748e-03 -3.727824e-03 4.120383e-02 4.830849e-02 1.364977e-01 5.799358e-02 -2.324795e-01 -1.482451e-02 -1.186800e-01 3.890371e-01 -3.720805e-01 5.971385e-02 1.075659e-01 1.485522e-02 1.212030e-01 -9.052026e-03 1.471439e-01 1.756299e-02 -1.995570e-03 -3.493670e-01 -4.318820e-01 -2.974608e-02 -5.211466e-03 3.279264e-01 1.438047e-01 5.797777e-02 1.630520e-01 -5.025386e-02 5.201952e-03 5.258302e-03 6.756944e-02 -5.292727e-02 -1.245453e-02 1.546314e-02 -8.736269e-02 3.026457e-01 -8.854019e-02 7.789176e-02 -5.576559e-01 -4.313493e-02 4.248472e-02 -3.000031e-02 -2.883470e-01 8.491928e-02 8.040342e-02 1.954056e-01 6.322362e-02 -1.561375e-02 2.035965e-01 4.520636e-01 -6.881126e-02 -1.925217e-01 -1.349658e-01 6.268805e-03 -2.238325e-01 -3.283323e-02 1.863905e-01 -1.276614e-02 5.773340e-03 -3.149925e-02 -1.107497e-02 6.803931e-02 2.978956e-02 -5.602395e-02 -7.431678e-02 1.117637e-01 -7.470360e-02 7.790920e-02 -2.956557e-01 8.587814e-02 -3.684416e-01 -4.817169e-02 2.860753e-01 7.028465e-03 1.120534e-01 -3.049428e-02 -4.400177e-01 1.692483e-01 -4.756830e-02 -5.295671e-02 3.164638e-03 5.677003e-01 -5.078881e-03 -3.822422e-02 -1.590473e-01 3.167929e-02 1.601542e-02 4.699152e-02 2.286152e-01 -6.249920e-01 6.832040e-02 2.859750e-01 -4.635681e-02 4.647345e-01 -1.340233e-01 6.330753e-02 2.045600e-02 -5.385727e-02 1.075149e-01 -9.460597e-02 -1.098696e-01 -4.287497e-03 1.164211e-01 -1.479741e-01 1.658899e-02 -4.793923e-02 8.016348e-02 -1.612147e-02 -9.775062e-02 9.616033e-02 -1.052605e-01 -7.450343e-02 1.163902e-01 1.320349e-01 -5.080785e-02 6.211336e-02 1.908719e-01 -7.974100e-02 -2.050381e-01 6.598883e-02 -2.004308e-01
  Number of Output Channels = 6
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#12.Probability values -> Simple DSP - inverse => #13
  Equation = (x-0.5)*(-2)
Graz Motor Imagery BCI Stimulator => #14
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stimulations 1=#0.Stimulations, Input stimulations 2=#14 -> Stimulation multiplexer => #15
Input stream 1=#0.Experiment information, Input stream 2=#2, Input stream 3=#15 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false
Stimulations=#14, Amplitude=#13 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
