OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  SVM output between -1 and 1
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  1 channel for orignal input
  1 channel for biased output (enables only during trials)
Comment
  Important: configure same sampling rate as signals, use a size of chunk that is compatible
  (eg chunk size 4 is a divider of sampling rate 500)

GDF file reader => #0
  Filename = /home/jfrey/flow/script-openVibe/signals/14/mus/motor-imagery-csp-4-online-noadapt-[2016.08.01-20.03.14]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
#0.EEG stream -> Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.294744e-01 -2.323997e-03 -1.172899e-01 7.904417e-02 -4.678987e-03 -1.480532e-02 3.288625e-01 9.899766e-02 -5.859898e-02 -6.053415e-02 8.232338e-02 -1.206066e-01 1.361789e-02 4.191017e-02 6.020967e-02 -2.998195e-02 1.135348e-01 -1.721095e-02 7.984661e-03 -6.274972e-02 -2.213104e-01 3.848154e-01 -3.010207e-01 -6.173344e-01 -2.639345e-02 1.205918e-01 -1.216273e-02 -4.371343e-02 3.227330e-01 7.435097e-03 1.942013e-02 -4.791342e-02 -1.133680e-01 -1.154164e-02 7.755973e-02 1.895505e-02 1.079151e-01 -1.658046e-01 -5.792727e-03 3.943810e-02 1.684850e-02 1.743407e-01 -1.474393e-01 -1.581023e-01 7.788933e-03 9.963872e-02 7.206999e-02 -4.894499e-02 5.136610e-02 2.562057e-02 -2.194267e-01 1.037482e-01 -5.439070e-01 5.259241e-01 -9.303456e-02 2.337835e-01 -2.502675e-01 3.412005e-02 9.351780e-02 1.771881e-01 3.130330e-02 -7.566011e-02 -1.287270e-01 1.405718e-01 -3.678674e-02 2.656690e-01 1.661182e-01 8.551520e-03 -1.229204e-01 -5.326411e-02 -1.815028e-01 5.913277e-02 1.338544e-02 5.542956e-02 -2.038697e-02 3.481378e-01 1.048886e-02 1.311867e-01 3.463716e-02 1.097454e-01 -4.224169e-01 3.704429e-01 -2.690226e-01 -9.237831e-02 7.775108e-02 4.531567e-02 1.970177e-03 -1.730813e-01 -1.217158e-01 -2.208003e-01 1.087897e-02 3.231719e-01 6.076504e-02 -2.647269e-01 1.108553e-02 1.180200e-01 1.471612e-01 -7.052589e-02 -1.379331e-03 -2.792657e-01 -2.438910e-01 -1.127626e-01 2.491616e-01 -6.507457e-02 4.272744e-02 6.583720e-02 -1.260798e-03 9.088056e-02 4.061099e-02 -1.052098e-01 4.496769e-02 1.388210e-03 2.215739e-02 -3.563321e-02 -1.361345e-02 8.221903e-02 -1.270721e-01 1.373471e-01 -3.411172e-02 4.957325e-02 -9.582889e-02 -2.417433e-01 7.203678e-03 -2.181244e-01 -4.898791e-02 -1.359233e-01 5.573292e-01 4.833404e-01 7.085808e-02 -2.459181e-02 4.651646e-02 -2.474399e-01 -5.486941e-02 -1.597362e-01 -6.467858e-02 2.208040e-02 7.729870e-01 -6.645878e-03 -9.495050e-02 -2.271653e-01 1.283415e-02 7.304622e-02 -2.660558e-01 6.192287e-02 1.317806e-01 -8.175986e-02 -8.965948e-02 2.909289e-02 -4.389735e-03 2.384971e-02 5.232414e-02 1.351367e-01 -2.204381e-02 -8.079580e-02 -6.401168e-02 3.938746e-02 -1.718052e-01 3.232228e-02 2.344046e-01 -8.246065e-02 1.510486e-01 -7.707459e-02 -1.714045e-01 -3.387307e-01 2.470643e-01 2.023074e-01 1.106203e-01 -5.830178e-02 -2.914193e-01 2.771679e-02 6.075285e-02 1.600633e-01 1.641049e-02 3.282908e-03 3.405953e-02 -7.866617e-02 5.667055e-02 -2.937908e-02 7.669989e-02 -1.734866e-02 -1.644591e-02 -2.197409e-01 -1.980361e-01 3.920398e-02 2.454512e-01 -1.645630e-01 4.193126e-02 3.474832e-01 -1.718608e-01 -1.010888e-01 3.900952e-01 -2.925031e-01
  Number of Output Channels = 6
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter_tux.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier_tux.cfg
#11.Probability values -> Simple DSP - inverse => #12
  Equation = (x-0.5)*(-2)
input0=#0.Stimulations, input1=#12 -> 0xc67a01dc bias classifier adapt
  Clock frequency (Hz) = 128
  Script = /home/jfrey/flow/script-openVibe/ov_bias_adapt_classifier.py
  Sampling frequency = 500
  Generated epoch sample count = 32
  Debug = false
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_SegmentStop
  Performance data = ${Player_ScenarioDirectory}/run_perfs.cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
-> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
