OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  SVM output between -1 and 1
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  1 channel for orignal input
  1 channel for biased output (enables only during trials)
Comment
  Important: configure same sampling rate as signals, use a size of chunk that is compatible
  (eg chunk size 4 is a divider of sampling rate 500)
Comment
  Stims from tux

  NB: scenario will freeze until tux launches
Comment
  To magical joystick script

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename => #1
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
  0x8d21ff41 = ${Player_ScenarioDirectory}/acticap_channels_name.cfg
-> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "!20"
  Channel List = 20
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 13.0
  High cut frequency (Hz) = 15.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/frequencyBandSelected.cfg
-> CSP Spatial Filter
  Spatial Filter Coefficients = 9.735445e-02 -2.921826e-01 -2.039099e-01 -4.722273e-03 9.870016e-02 9.929850e-02 6.871453e-02 6.703718e-02 -1.248858e-01 -1.777711e-01 4.092856e-02 -1.273955e-02 1.824500e-02 -2.044342e-01 -6.536584e-02 2.970428e-01 1.971299e-01 -2.995519e-01 -5.718905e-02 4.954399e-02 -1.281132e-02 4.251712e-02 1.477252e-01 -1.457767e-02 5.097334e-03 -7.192732e-02 -6.790936e-02 -7.191563e-02 1.977216e-02 -2.685345e-02 -1.949718e-01 6.622912e-01 2.632067e-01 -6.173738e-02 -2.298780e-01 -2.880775e-01 -2.912204e-01 -5.583069e-02 1.078296e-01 1.612816e-01 1.146160e-01 1.242377e-01 -1.926168e-02 5.322336e-02 2.310820e-02 4.112214e-02 2.504438e-01 -3.598004e-01 -1.142105e-01 8.827734e-02 6.715057e-02 1.938243e-01 1.722044e-02 -8.794210e-02 -7.389569e-02 -2.462672e-02 2.981616e-02 -1.121677e-01 -1.523644e-01 -1.043590e-02 8.238690e-02 3.870855e-02 -1.442601e-01 5.444549e-01 1.348568e-01 1.449834e-01 -2.076555e-01 -6.998128e-02 -4.616499e-01 3.846218e-02 4.637741e-02 -5.552589e-02 2.459183e-01 1.905059e-01 -1.410812e-01 3.121608e-01 -2.041493e-01 -1.043326e-02 -1.168427e-01 2.169823e-01 -1.048317e-01 -4.214729e-02 2.281751e-01 -1.965939e-01 2.529071e-02 1.411086e-01 -8.336933e-02 -1.100055e-02 -1.837444e-01 2.786798e-02 5.794595e-02 2.479660e-01 -5.544410e-02 -2.716042e-01 2.371781e-01 -1.127998e-01 6.644614e-02 -6.380038e-02 -3.750319e-02 -3.282748e-01 -2.940688e-02 6.379782e-01 1.672276e-02 -2.161913e-01 7.316257e-04 -7.026597e-02 1.323322e-02 2.246613e-02 4.540107e-02 5.808719e-02 1.383632e-03 -9.680529e-03 2.695327e-03 -5.953317e-02 3.000930e-02 8.915977e-02 -3.152084e-03 -1.505261e-01 -5.121407e-02 -2.744485e-01 4.732986e-01 8.355405e-02 -3.929809e-02 -2.441888e-01 -2.553625e-02 3.227182e-02 8.993593e-02 -3.652238e-02 -8.125129e-02 5.653833e-02 -2.918983e-03 3.095223e-01 -2.513475e-02 -1.402065e-01 6.594109e-02 9.299464e-02 -5.490653e-02 -2.230965e-01 -1.312375e-03 -8.772330e-03 3.464254e-02 3.123071e-03 7.812960e-03 -4.242000e-02 -6.145559e-02 3.220336e-01 3.015279e-01 2.437366e-02 -3.380645e-03 7.480166e-03 -1.447716e-02 2.943533e-03 -6.394798e-01 -1.068339e-02 -9.389736e-02 -2.081238e-01 2.721150e-01 4.420873e-02 2.607524e-01 2.669346e-02 6.462615e-02 -4.171055e-01 7.724122e-03 -3.270366e-01 -4.564672e-02 5.905950e-01 -1.192188e-01 -1.421748e-01 -1.211981e-01 4.443915e-02 -6.190157e-03 7.987593e-02 8.667078e-02 -1.213913e-01 5.482912e-04 1.338471e-02 -4.888259e-02 5.761814e-02 2.159490e-01 -1.855956e-01 1.102716e-01 -5.075028e-02 -1.562017e-01 2.573912e-01 -2.208911e-01 1.331868e-02 -2.692598e-02 -4.914633e-02 5.240661e-02 8.863579e-02 9.696002e-02 -1.404394e-01
  Number of Output Channels = 6
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/csp-spatial-filter_fix.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/signals/motor-imagery-bci-config-classifier_fix.cfg
#11.Probability values -> Simple DSP - inverse => #12
  Equation = (x-0.5)*(-2)
LSL stim reader => #13
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = false
  Overcome code check = false
input0=#13, input1=#12 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier_vidaurre.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  Debug = false
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_GDF_AEP
  Performance computations = true
  Performance data = ${Player_ScenarioDirectory}/signals/run_perfs.cfg
  Accuracy data = ${Player_ScenarioDirectory}/signals/concatenated_training_metrics.xml
  Performance backup = ${Player_ScenarioDirectory}/signals/run_perfs_[$core{date}-$core{time}].cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
  Class A collection star = OVTK_StimulationId_Label_07
  Class B collection star = OVTK_StimulationId_Label_08
  Center = true
  Adapt = false
  Bias negative = true
  Fake output = false
-> Identity "python script output" => #15
-> Signal average => #16
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#16 -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Crop => #19
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
Input signal=#19 -> LSL Export
  Signal stream = hyperplane
  Marker stream = openvibeMarkers
Input stimulations 1=#0.Stimulations, Input stimulations 2=#13 -> Stimulation multiplexer => #21
Input stream 1=#1, Input stream 2=#21 -> Identity => #22
#22.Output stream 1 -> Temporal filter => #23
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Channel Selector "1:16" => #24
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
Data=#24, Stimulations=#22.Output stream 2 -> Signal display "1:16"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#23 -> Channel Selector "17:32" => #26
  Channel List = 17:32
  Action = Select
  Channel Matching Method = Smart
Data=#26, Stimulations=#22.Output stream 2 -> Signal display "17:32"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 500
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#22.Output stream 1, Stimulation=#22.Output stream 2 -> GDF file writer EEG
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4bis-online-noadapt-truetrue-fix-[$core{date}-$core{time}]_EEG.gdf
Signal=#15, Stimulation=#22.Output stream 2 -> GDF file writer class
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4bis-online-noadapt-truetrue-fix-[$core{date}-$core{time}]_class.gdf
