OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Fabien Lotte
0x9f5c4075 = Frequency band selection
0xf8034a49 = Inria Bordeaux Sud-Ouest
Comment
  Select here the channels to compute a laplacian
  around the channels of interest for the BCI at hand
  (e.g., channels for a Laplacian around C3 et C4 for a left and right hand motor imagery BCI)
Comment
  Apply a spatial filter to compute the Laplacian around the selected channels
Comment
  Frequency Band Selection:
  A box to select a good frequency band to discriminate two EEG classes from the input EEG channel data.
  Based on the Heuristic algorithm by Blankertz et al, IEEE Sig Proc Mag, 2008
  The found frequency band is saved to a config file for a temporal filter
  A 'OVTK_StimulationId_TrainCompleted' stimulation is sent as output when the training is complete

  Parameters:
  Class 1 stimulation label: the stimulation label defining the begininng of a trial from the first class
  Class 2 stimulation label: the stimulation label defining the begininng of a trial from the second class
  Train Stimulation: the stimulation label indicated that all trials are finished and that the frequency selection algorithm can start
  MinFrequency: the minimal frequency that will be considered for the best band
  MaxFrequency: the maximal frequency that will be considered for the best band
  Output config filename: the config filename where to store the obtained frequency band (a temporal filter config filename)

Generic stream reader "Training EEG data file reader" => #0
  Filename = C:/Users/BCI/Desktop/XP_Summer2018/OpenVibe/signals/XP2018_S14_acquisition_concatfile-[2018.05.16-16.45.45].ov
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd"
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Channel Selector "FC3; C5; C3; C1; CP3; FC4; C6; C4; C2; CP4"
  Channel List = FC3; C5; C3; C1; CP3; FC4; C6; C4; C2; CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 & C4" => #3
  Spatial Filter Coefficients = -1;-1;4;-1;-1;0;0;0;0;0;0;0;0;0;0;-1;-1;4;-1;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Cue + 0.5s" => #4
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = -0.75
  Stimulation to epoch from = OVTK_GDF_Feedback_Continuous
EEG epochs=#4, class Stimulation=#0.Output stream 3 -> Frequency Band Selection
  Clock frequency (Hz) = 64
  Script = ${__volatile_ScenarioDir}/frequencyBandSelection.py
  Class 1 stimulation label = OVTK_GDF_Left
  Class 2 stimulation label = OVTK_GDF_Right
  Train Stimulation = OVTK_StimulationId_Train
  MinFrequency = 5
  MaxFrequency = 35
  Output config filename = ${Player_ScenarioDirectory}/frequencyBandSelected.cfg
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
