OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

Generic stream reader => #0
  Filename = C:/Users/BCI/Desktop/XP_Summer2018/OpenVibe/signals/XP2018_S14_acquisition_concatfile-[2018.05.16-16.45.45].ov
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd"
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 5.0
  High cut frequency (Hz) = 8.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/frequencyBandSelected.cfg
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#3.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
