OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition or 4-online and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  When the training is completed the box
  outputs a stimulation OVTK_StimulationId_TrainCompleted
  to stop the scenario through a Player Controller

Generic stream reader => #0
  Filename = C:/Users/BCI/Desktop/XP_Summer2018/OpenVibe/signals/XP2018_S14_acquisition_concatfile-[2018.05.16-16.45.45].ov
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd"
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 13.0
  High cut frequency (Hz) = 15.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/frequencyBandSelected.cfg
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter => #4
  Spatial Filter Coefficients = -4.017546e-001 -3.522788e-001 -9.802327e-004 6.908590e-002 -8.434244e-002 -1.052647e-001 -1.616481e-001 -1.618176e-002 -8.008736e-002 4.226550e-002 6.211065e-003 4.336094e-002 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0.000000e+000
  Number of Output Channels = 6
  Number of Input Channels = 34
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Stimulations=#3.Output stream 2, Features for class 1=#10, Features for class 2=#16 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
