OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  N'oubliez pas de changer le numéro du sujet dans ces boites

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename
  New channel names = Fz;FCz;Cz;CPz;Pz;C1;C3;C5;C2;C4;C6;EOG1;EOG2;EOG3;EMGg;EMGd;EventChannel2;F4;FC2;FC4;FC6;CP2;CP4;CP6;P4;F3;FC1;FC3;FC5;CP1;CP3;CP5;P3;EventChannel1
  0x8d21ff41 = ${__volatile_ScenarioDir}/channelList
-> Channel Selector "!EventChannel1;EventChannel2;EOG1;EOG2;EOG3;EMGg;EMGd"
  Channel List = EventChannel1;EventChannel2;EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 5.0
  High cut frequency (Hz) = 8.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/frequencyBandSelected.cfg
-> CSP Spatial Filter
  Spatial Filter Coefficients = 2.832690e-001 -1.907607e-001 3.849675e-001 1.531067e-001 5.142403e-002 -3.864561e-001 -3.753959e-002 2.384793e-001 4.869075e-002 1.862371e-002 -4.005613e-002 9.638923e-002 -5.861810e-002 -1.973261e-001 3.041114e-002 4.043036e-001 -1.772370e-001 -9.458195e-002 -7.081798e-002 -1.157860e-001 1.294264e-001 2.962804e-002 -2.327985e-001 -2.082031e-001 -2.962565e-001 1.330321e-001 4.076436e-002 5.597564e-002 2.809636e-002 1.028357e-001 1.865523e-002 -6.966217e-002 -4.455163e-001 5.706286e-001 -2.229597e-002 3.475766e-001 -1.258174e-002 5.572618e-002 1.378696e-002 -2.328478e-001 -9.689846e-002 6.457392e-002 -1.345910e-002 5.133916e-002 -1.295685e-001 7.381396e-002 3.747084e-002 -7.570061e-003 -1.205832e-001 -2.400650e-001 2.116587e-001 -2.824560e-001 1.365299e-001 -1.474941e-001 1.302840e-001 -1.156207e-002 -3.894038e-001 -7.283271e-002 -2.816434e-002 1.293072e-001 -5.927743e-002 1.109928e-001 4.909273e-001 -4.185500e-002 -1.987242e-001 -4.566950e-002 8.083083e-002 -1.947851e-001 1.710421e-001 -1.394240e-001 -9.330535e-002 5.000519e-002 1.140490e-001 -2.117264e-002 -1.883890e-001 -1.544511e-001 2.218316e-001 4.303398e-001 1.271603e-001 -9.302052e-002 -2.680789e-001 -2.607513e-001 5.391195e-002 -2.028793e-001 6.632324e-002 6.899694e-002 7.447169e-002 2.870225e-001 3.067093e-001 7.981086e-003 -2.725057e-002 -6.045707e-002 1.775244e-001 9.892078e-004 1.431411e-002 -3.657751e-002 -2.821123e-001 2.073575e-001 -9.795488e-002 1.015193e-001 3.146434e-001 1.419181e-001 -4.280178e-001 -1.125484e-001 6.464646e-002 -3.828138e-001 -1.604016e-001 1.591122e-001 -2.607482e-001 2.673071e-001 -1.719003e-001 3.249528e-002 -1.994314e-001 -2.460165e-001 -3.606374e-001 -1.223620e-002 3.033245e-002 -7.340902e-003 1.075686e-001 2.910993e-001 -2.620312e-001 -1.703680e-001 2.465375e-002 4.221764e-002 -6.541871e-002 8.404032e-002 5.283788e-002 2.715800e-001 3.033511e-001 -2.305636e-001 -1.522618e-002 2.875287e-001 2.824752e-001 6.826707e-002 -4.071253e-002 -7.476623e-002 -8.692144e-002 -5.361285e-001 -2.206606e-001 1.017054e-001 4.080095e-001 -1.027694e-002 -2.580136e-001 3.434768e-001 -4.410906e-003 -1.494470e-001 1.486552e-001 -1.313332e-001 -1.291501e-001 1.700817e-002 8.807029e-002 -1.370953e-001 1.022557e-001 -7.237368e-002 -5.255662e-002 3.781585e-001 4.949119e-002 3.175256e-002 8.476952e-003 7.982492e-002 8.931789e-002 -6.856092e-002
  Number of Output Channels = 6
  Number of Input Channels = 27
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
-> Generic stream writer
  Filename = C:/Users/BCI/Desktop/XP_Summer2018/OpenVibe/signals/XP2018_S14r6_onlineT_features-[$core{date}-$core{time}].ov
  Use compression = false
Graz Motor Imagery BCI Stimulator => #11
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
#11 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#11 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/signals/XP2018_S14r6_onlineT-[$core{date}-$core{time}].gdf
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#11 -> Generic stream writer
  Filename = ${__volatile_ScenarioDir}/signals/XP2018_S14r6_onlineT-[$core{date}-$core{time}].ov
  Use compression = false
Features=#9, Commands=#11 -> 0xc73e83ec Classifier processor => #16
  Filename to load configuration from = C:/Users/BCI/Desktop/XP_Summer2018/OpenVibe/motor-imagery-bci-config-classifier.cfg
Input Signal=#16.Labels, Input Stimulations=#16.Hyperplane distance, Input stream 3=#16.Probability values, Input stream 4=#11 -> Generic stream writer
  Filename = C:/Users/BCI/Desktop/XP_Summer2018/OpenVibe/signals/XP2018_S14r6_onlineT_classifier_output-[$core{date}-$core{time}].ov
  Use compression = false
#16.Probability values -> Simple DSP
  Equation = 0.5-x
#16.Hyperplane distance -> 0x341d3912 Generic stream writer "Create ShamFB"
  Filename = ${__volatile_ScenarioDir}/signals/XP2018_shamFBa-[$core{date}-$core{time}].ov
  Use compression = false
Stimulations=#11, Amplitude=#16.Hyperplane distance -> 0xc73e83ec Participant - Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = true
Stimulations=#11, Amplitude=#16.Hyperplane distance -> Expérimentateur - Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false

0x341d3912 Matrix Transpose
-> 0x341d3912 Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
