OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

GDF file reader => #0
  Filename = C:/BCI/tux2/script-openVibe/signals/motor-imagery-csp-4-online-noadapt-[2019.05.02-11.20.45]_EEG.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#0.EEG stream -> Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
  0x8d21ff41 = ${Player_ScenarioDirectory}/acticap_channels_name.cfg
-> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 13.0
  High cut frequency (Hz) = 15.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/frequencyBandSelected.cfg
-> CSP Spatial Filter
  Spatial Filter Coefficients = 9.735445e-02 -2.921826e-01 -2.039099e-01 -4.722273e-03 9.870016e-02 9.929850e-02 6.871453e-02 6.703718e-02 -1.248858e-01 -1.777711e-01 4.092856e-02 -1.273955e-02 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-1.404394e-01
  Number of Output Channels = 6
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/csp-spatial-filter.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/signals/motor-imagery-bci-config-classifier.cfg
#10.Probability values -> Simple DSP - inverse => #11
  Equation = (x-0.5)*(-2)
input0=#0.Stimulations, input1=#11 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier_vidaurre.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  Debug = false
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_EndOfFile
  Performance computations = true
  Performance data = ${Player_ScenarioDirectory}/signals/run_perfs_replay_extended.cfg
  Accuracy data = ${Player_ScenarioDirectory}/signals/concatenated_training_metrics.xml
  Performance backup = ${Player_ScenarioDirectory}/signals/run_perfs_replay_extended_[$core{date}-$core{time}].cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
  Class A collection star = OVTK_StimulationId_Label_07
  Class B collection star = OVTK_StimulationId_Label_08
  Center = false
  Adapt = false
  Bias negative = false
  Fake output = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
