OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

GDF file reader => #0
  Filename = /home/jfrey/flow/script-openVibe/signals/7/nomus/motor-imagery-csp-4-online-noadapt-[2016.08.02-19.32.13]_class.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/replayer_adapt_gdf.cfg
#0.EEG stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Signal average => #2
-> 0xc73e83ec Matrix Display "in"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
input0=#0.Stimulations, input1=#2 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier.py
  Sampling frequency = 500
  Generated epoch sample count = 32
  Debug = false
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_SegmentStop
  Performance data = ${Player_ScenarioDirectory}/run_perfs_replay.cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
