<OpenViBE-Scenario>
	<Creator>OpenViBE</Creator>
	<CreatorVersion>1.2.1</CreatorVersion>
	<Boxes>
		<Box>
			<Identifier>(0x00001d3f, 0x00006e8a)</Identifier>
			<Name>Player Controller</Name>
			<AlgorithmClassIdentifier>(0x5f426dce, 0x08456e13)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation name</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_ExperimentStop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0xcc14d8d6, 0xf27ecb73)</TypeIdentifier>
					<Name>Action to perform</Name>
					<DefaultValue>Pause</DefaultValue>
					<Value>Stop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>64.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>27</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>752.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x568d148e, 0x650792b3)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>131</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002117, 0x000005ce)</Identifier>
			<Name>Acquisition client</Name>
			<AlgorithmClassIdentifier>(0x35d225cb, 0x3e6e3a5f)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Experiment information</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal stream</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x013df452, 0xa3a8879a)</TypeIdentifier>
					<Name>Channel localisation</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel units</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
					<Name>Acquisition server hostname</Name>
					<DefaultValue>${AcquisitionServer_HostName}</DefaultValue>
					<Value>${AcquisitionServer_HostName}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Acquisition server port</Name>
					<DefaultValue>1024</DefaultValue>
					<Value>1024</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>-64.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>27</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>656.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x0d4656c0, 0xc95b1fa8)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>136</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>5</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00005a9c, 0x00004eff)</Identifier>
			<Name>Generic stream writer</Name>
			<AlgorithmClassIdentifier>(0x09c92218, 0x7c1216f8)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Input stream 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input stream 2</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stream 3</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue></DefaultValue>
					<Value>${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].ov</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Use compression</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>32.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>42</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>572.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x89a08108, 0xc8d1fac1)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>166</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x002730c3)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00006ea1, 0x00004c67)</Identifier>
			<Name>Graz Motor Imagery BCI Stimulator</Name>
			<AlgorithmClassIdentifier>(0x0b5a2787, 0x02750621)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0xb0d0db45, 0x49cbc34a)</TypeIdentifier>
					<Name>Lua Script</Name>
					<DefaultValue></DefaultValue>
					<Value>${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Number of Trials for Each Class</Name>
					<DefaultValue>20</DefaultValue>
					<Value>20</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>First Class</Name>
					<DefaultValue>OVTK_GDF_Left</DefaultValue>
					<Value>OVTK_GDF_Left</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Second Class</Name>
					<DefaultValue>OVTK_GDF_Right</DefaultValue>
					<Value>OVTK_GDF_Right</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Baseline Duration (in sec)</Name>
					<DefaultValue>20</DefaultValue>
					<Value>20</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Wait For Beep Duration (in sec)</Name>
					<DefaultValue>2</DefaultValue>
					<Value>2</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Wait For Cue Duration (in sec)</Name>
					<DefaultValue>1</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Display Cue Duration (in sec)</Name>
					<DefaultValue>1.250</DefaultValue>
					<Value>1.250</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Feedback Duration (in sec)</Name>
					<DefaultValue>3.750</DefaultValue>
					<Value>3.750</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>End of Trial Minimum Duration (in sec)</Name>
					<DefaultValue>1.500</DefaultValue>
					<Value>1.500</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>End of Trial Maximum Duration (in sec)</Name>
					<DefaultValue>3.500</DefaultValue>
					<Value>3.500</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>-224.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>57</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>656.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xd6e3f48b, 0xbee3523a)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x61d11811, 0x71e65362)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>257</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc67a01dc, 0x28ce06c1)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xf191c1c8, 0xa0123976)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x022844b3, 0x367522a4)</Identifier>
			<Name>Graz visualization</Name>
			<AlgorithmClassIdentifier>(0x00dd290d, 0x5f142820)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x544a003e, 0x6dcba5f6)</TypeIdentifier>
					<Name>Amplitude</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Show instruction</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Show feedback</Name>
					<DefaultValue>false</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Delay feedback</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Show accuracy</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Predictions to integrate</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Positive feedback only</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>-144.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa963f5, 0x1a638cd4)</Identifier>
					<Value>27</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>656.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x60662001, 0xbee8820f)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xad100179, 0xa3c984ab)</Identifier>
					<Value>137</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x00001f15, 0x00005eef)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002117, 0x000005ce)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005a9c, 0x00004eff)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>-44</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>641</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>572</Value>
				</Attribute>
			</Attributes>
		</Link>
		<Link>
			<Identifier>(0x0000440e, 0x000000f9)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002117, 0x000005ce)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001d3f, 0x00006e8a)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>-44</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>656</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>46</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>752</Value>
				</Attribute>
			</Attributes>
		</Link>
		<Link>
			<Identifier>(0x0000710b, 0x00002d2b)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002117, 0x000005ce)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005a9c, 0x00004eff)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>-44</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>626</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>557</Value>
				</Attribute>
			</Attributes>
		</Link>
		<Link>
			<Identifier>(0x000078b6, 0x00007452)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006ea1, 0x00004c67)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x022844b3, 0x367522a4)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>-189</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>656</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>-162</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>648</Value>
				</Attribute>
			</Attributes>
		</Link>
		<Link>
			<Identifier>(0x354c3dbb, 0x170b6d13)</Identifier>
			<Source>
				<BoxIdentifier>(0x00006ea1, 0x00004c67)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005a9c, 0x00004eff)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
			<Attributes>
				<Attribute>
					<Identifier>(0x1b32c44c, 0x1905e0e9)</Identifier>
					<Value>-189</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x358ae8b5, 0x0f8bacd1)</Identifier>
					<Value>656</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x3f0a3b27, 0x570913d2)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x6267b5c5, 0x676e3e42)</Identifier>
					<Value>587</Value>
				</Attribute>
			</Attributes>
		</Link>
	</Links>
	<MessageLinks></MessageLinks>
	<Comments>
		<Comment>
			<Identifier>(0x0000159f, 0x00004fe3)</Identifier>
			<Text>&lt;u&gt;&lt;b&gt;Note:&lt;/b&gt;&lt;/u&gt; It is always a good idea to
monitor the signals during an experiment</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>992</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>32</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00001bd9, 0x00000872)</Identifier>
			<Text>&lt;u&gt;&lt;b&gt;&lt;big&gt;Overview&lt;/big&gt;&lt;/b&gt;&lt;/u&gt;

This scenario can be used as a first
step to collect some training data. Those
data will later be used to train a classifier
for online use.

When you start this scenario, just wait 40
seconds before it starts the instruction sequence.

You will then be presented left / right arrows to
let you imagine left / right hand movements.
There will be 20 arrows of each side.

&lt;small&gt;&lt;i&gt;&lt;b&gt;note:&lt;/b&gt; the recorded files go to the
folder where the scenario xml is located
(&lt;span color=&quot;darkblue&quot;&gt;${Player_ScenarioDirectory}/&lt;/span&gt;).&lt;/i&gt;&lt;/small&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>992</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>-176</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00002ba5, 0x000028e3)</Identifier>
			<Text>You can browse each box' documentation by selecting the box and pressing &lt;b&gt;F1&lt;/b&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>544</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>-288</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00003f81, 0x00006bfa)</Identifier>
			<Text>The Graz Visualization box will send the timeline
markers directly to Acquisition Server using the
TCP Tagging plugin. The server will then attach them
appropriately to the EEG stream.</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>304.000000</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>-112.000000</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<VisualisationTree>
		<VisualisationWidget>
			<Identifier>(0x00000878, 0x000036c2)</Identifier>
			<Name>Default window</Name>
			<Type>1</Type>
			<ParentIdentifier>(0xffffffff, 0xffffffff)</ParentIdentifier>
			<BoxIdentifier>(0xffffffff, 0xffffffff)</BoxIdentifier>
			<NumChildren>1</NumChildren>
			<Attributes>
				<Attribute>
					<Identifier>(0x4c90d4ad, 0x7a2554ec)</Identifier>
					<Value>505</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7b814cca, 0x271df6dd)</Identifier>
					<Value>608</Value>
				</Attribute>
			</Attributes>
		</VisualisationWidget>
		<VisualisationWidget>
			<Identifier>(0x55032c6f, 0x5edaffba)</Identifier>
			<Type>3</Type>
			<ParentIdentifier>(0xffffffff, 0xffffffff)</ParentIdentifier>
			<BoxIdentifier>(0x022844b3, 0x367522a4)</BoxIdentifier>
			<NumChildren>0</NumChildren>
		</VisualisationWidget>
		<VisualisationWidget>
			<Identifier>(0x00004626, 0x00001cdf)</Identifier>
			<Name>Default tab</Name>
			<Type>2</Type>
			<ParentIdentifier>(0x00000878, 0x000036c2)</ParentIdentifier>
			<Index>0</Index>
			<BoxIdentifier>(0xffffffff, 0xffffffff)</BoxIdentifier>
			<NumChildren>1</NumChildren>
		</VisualisationWidget>
		<VisualisationWidget>
			<Identifier>(0x000027da, 0x00000e29)</Identifier>
			<Name>Empty</Name>
			<Type>0</Type>
			<ParentIdentifier>(0x00004626, 0x00001cdf)</ParentIdentifier>
			<Index>0</Index>
			<BoxIdentifier>(0xffffffff, 0xffffffff)</BoxIdentifier>
			<NumChildren>0</NumChildren>
		</VisualisationWidget>
	</VisualisationTree>
	<Attributes>
		<Attribute>
			<Identifier>(0x790d75b8, 0x3bb90c33)</Identifier>
			<Value>Yann Renard / Fabien Lotte</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x8c1fc55b, 0x7b433dc2)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x9f5c4075, 0x4a0d3666)</Identifier>
			<Value>Data Acquisition</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf36a1567, 0xd13c53da)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf6b2e3fa, 0x7bd43926)</Identifier>
			<Value>Motor Imagery</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf8034a49, 0x8b3f37cc)</Identifier>
			<Value>INRIA</Value>
		</Attribute>
	</Attributes>
</OpenViBE-Scenario>