OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Graz Motor Imagery BCI Stimulator => #2
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#1, Input stream 2=#2 -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = -3.018857e-003 -3.849379e-001 -3.364587e-001 1.616158e-001 3.461979e-001 8.246876e-002 1.212028e-002 -4.720742e-002 -5.801283e-002 -4.631564e-002 3.018343e-001 2.453849e-002 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0.000000e+000
  Number of Output Channels = 6
  Number of Input Channels = 34
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #10
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#10.Probability values -> Simple DSP => #11
  Equation = x-0.5
New input[0]=#2, New input[1]=#11 -> Python scripting
  Clock frequency (Hz) = 128
  Script = C:/Users/BCI/Documents/lsl2python/biasedFB_OV.py
-> Crop => #13
  Crop method = Min/Max
  Min crop value = -0.5
  Max crop value = 0.5
Stimulations=#2, Amplitude=#13 -> Visu
  Show instruction = true
  Show feedback = true
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#2 -> 0xc67a01dc Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-S22r4VB-[$core{date}-$core{time}].ov
  Use compression = false
