OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  BCI flow experiment, fake online, no adapt
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  SVM output between -1 and 1
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -2.703847e-01 2.033487e-01 -2.403200e-01 -2.356384e-01 -3.924334e-01 -2.392066e-01 -1.127001e-01 -5.732517e-01 -3.104992e-01 -2.895370e-01 -1.986914e-01 -2.802672e-01 8.643105e-02 -2.668895e-01 -2.873127e-01 -3.079677e-01 -2.311889e-01 -3.049964e-01 -3.204299e-01 -4.425823e-01 -2.982541e-01 -3.624586e-01 -1.742173e-02 -7.034824e-01 -5.972390e-03 -1.229288e-01 1.248160e-01 2.072844e-02 6.844782e-02 -2.541235e-01 -2.561702e-01 -3.879783e-01 4.338652e-01 -1.443250e-01 -3.069893e-01 -3.027873e-01 -3.956773e-01 -2.813833e-01 -2.775942e-01 -3.539172e-01 -2.829928e-01 -3.027860e-01 -3.108203e-01 -2.946543e-01 8.225511e-01 2.972052e-01 1.898103e-01 2.250846e-01 1.687400e-01 -1.535156e-01 -2.301235e-01 4.960151e-02 1.434643e-01 1.137550e-01 8.607017e-02 2.163404e-01 2.683757e-01 3.076638e-01 3.600561e-01 3.077418e-01 2.519811e-01 2.256496e-01 3.292373e-01 2.892907e-01 3.994635e-01 3.099989e-01
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#8.Probability values -> Simple DSP => #9
  Equation = (x-0.5)*2
-> Matrix Display "classifier output"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Graz Motor Imagery BCI Stimulator => #11
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
input0=#11, input1=#9 -> IBI / BPM
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov_noadapt.py
  Sampling frequency = 32
  Generated epoch sample count = 32
  Debug = true
New input[0]=#11, New input[1]=#9 -> Python scripting
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov_noadapt.py
-> Crop
  Crop method = Min/Max
  Min crop value = -0.5
  Max crop value = 0.5
-> 0xc67a01dc Matrix Transpose => #15
-> Matrix Display "classifier bias"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#15 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Stimulations=#11, Amplitude=#8.Probability values -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
