OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  To test bias or fake:
  Left  / Right arrow to start Left  / Right trial
  Up / Down arrow to end trial
  Enter to save data (mean classifier output)
  backspace to load data, used for recentering if set
Comment
  Input expected to be between -1 (for left class) and 1 (for right class).
  Uusually from classifier output input + DSP to change the range
Comment
  Box features :
  record mean input for both classes
  re-center based on last session
  compute a score (aggregations of stims)
  use data (e.g. about calibration session) to adapt bias.

mono_gui => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 128
  Generated epoch sample count = 4
  min value = -1
  max value = 1
  window title = mono_gui
Keyboard stimulator => #1
  Filename = ${Player_ScenarioDirectory}/graz_keyboard_to_stimulations.txt
input0=#1, input1=#0 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier_vidaurre.py
  Sampling frequency = 128
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_GDF_Start_Of_Trial
  Class Run stop = OVTK_GDF_End_Of_Trial
  Performance computations = true
  Performance data = ${Player_ScenarioDirectory}/run_perfs.cfg
  Accuracy data = ${Player_ScenarioDirectory}/concatenated_training_metrics.xml
  Performance backup = ${Player_ScenarioDirectory}/run_perfs_[$core{date}-$core{time}].cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
  Class A collection star = OVTK_StimulationId_Label_07
  Class B collection star = OVTK_StimulationId_Label_08
  Center = false
  Adapt = true
  Bias negative = false
  Fake output = false
-> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1 -> Stimulation listener
  Log level to use = Information
