OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Stims from tux

  NB: scenario will freeze until tux launches
Comment
  SVM output between -1 and 1
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  1 channel for orignal input
  1 channel for biased output (enables only during trials)
Comment
  Important: configure same sampling rate as signals, use a size of chunk that is compatible
  (eg chunk size 4 is a divider of sampling rate 500)
Comment
  To magical joystick script

mono_gui
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  min value = 0
  max value = 1
  window title = mono_gui
-> Simple DSP - inverse => #1
  Equation = (x-0.5)*(-2)
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
LSL stim reader => #3
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
input0=#3, input1=#1 -> bias classifier adapt
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier_vidaurre.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_Train
  Performance computations = true
  Performance data = ${Player_ScenarioDirectory}/run_perfs.cfg
  Performance backup = ${Player_ScenarioDirectory}/run_perfs_[$core{date}-$core{time}].cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
  Class A collection star = OVTK_StimulationId_Label_07
  Class B collection star = OVTK_StimulationId_Label_08
  Center = true
  Adapt = true
  Fake output = true
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal average => #6
-> Channel Selector "biased output"
  Channel List = 4
  Action = Select
  Channel Matching Method = Smart
-> Crop => #8
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
Input signal=#8 -> LSL Export
  Signal stream = hyperplane
  Marker stream = openvibeMarkers
#6 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
