OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
Comment
  Stims from tux

  NB: scenario will freeze until tux launches
Comment
  Faking acquisition server: note here 512Hz
Comment
  We don't have a classifier, fake its output
Comment
  Important: configure same sampling rate as signals, use a size of chunk that is compatible
  (eg chunk size 4 is a divider of sampling rate 500)
Comment
  Both signals must have same frequency,
  and preferably same chunk size (eg for signal display).
Comment
  1 channel for orignal input
  1 channel for biased output (enables only during trials)

LSL stim reader => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
-> Stimulation listener
  Log level to use = Information
Sinus oscillator => #2
  Channel count = 32
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Channel Selector "fake classifier"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching => #4
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
input0=#0, input1=#4 -> bias classifier => #5
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/test/ov_bias_classifier.py
  Sampling frequency = 512
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
Input 1=#2, Input 2=#5 -> Signal Merger => #6
Input stream 1=#6, Input stream 2=#0 -> Identity => #7
Data=#7.Output stream 1, Stimulations=#7.Output stream 2 -> Signal display "merged"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#7.Output stream 1, Stimulation=#7.Output stream 2 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/signals/record-[$core{date}-$core{time}].gdf
#5 -> Matrix Display "bias output"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5 -> Signal display "bias output"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#2, Stimulations=#0 -> Signal display "signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
