OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

GDF file reader => #0
  Filename = /home/jfrey/flow/script-openVibe/signals/14/mus/motor-imagery-csp-4-online-noadapt-[2016.08.01-20.03.14]_EEG.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Rename
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#3, Input stream 2=#0.Stimulations -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Right trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#4.Output stream 2, Signal condition 1=#5.Epoched signal, Signal condition 2=#6.Epoched signal -> 0xc67a01dc CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_SegmentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter_tux.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
