OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  SVM output between -1 and 1
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  1 channel for orignal input
  1 channel for biased output (enables only during trials)
Comment
  Important: configure same sampling rate as signals, use a size of chunk that is compatible
  (eg chunk size 4 is a divider of sampling rate 500)
Comment
  Stims from tux

  NB: scenario will freeze until tux launches
Comment
  Both signals must have same frequency,
  and preferably same chunk size (eg for signal display).
Comment
  To magical joystick script

Acquisition client => #0
  Acquisition server hostname = 193.50.110.71
  Acquisition server port = 1024
#0.Signal stream -> 0xc67a01dc Channel Selector "exchange 5-7 and 10-24 and 20-21"
  Channel List = 1:4;7;6;5;8;9;24;11:19;21;20;22;23;10;25:35
  Action = Select
  Channel Matching Method = Smart
#0.Signal stream -> Channel Rename => #2
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
-> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "!"
  Channel List =
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -4.375869e-04 -6.774989e-02 -2.553475e-02 2.611216e-02 -2.759197e-02 -1.318942e-02 3.957760e-02 2.262560e-01 8.823477e-03 2.145023e-02 -1.198442e-01 -6.776220e-01 -1.405075e-01 5.705105e-01 -6.581029e-02 -1.330913e-01 -9.343125e-03 2.558186e-02 1.150639e-02 -6.372271e-02 1.054986e-01 6.089028e-02 1.766812e-01 1.863867e-01 -8.078301e-02 -1.019056e-04 -7.346303e-02 -1.232558e-02 9.187860e-03 2.078361e-02 2.357415e-02 1.288514e-02 -3.649746e-02 3.521292e-01 -1.394719e-01 5.149526e-02 -2.621016e-02 1.499898e-01 2.156558e-02 -3.384861e-02 4.219598e-02 1.535812e-01 -3.206017e-01 8.523604e-02 1.600761e-02 3.613292e-01 2.482077e-03 -1.933469e-01 9.010830e-02 -2.564514e-01 7.613125e-02 1.348723e-01 3.856342e-02 -2.518606e-01 3.157316e-02 -3.311149e-01 1.888925e-02 1.405490e-01 -5.720194e-02 2.891567e-01 2.555672e-01 -2.128724e-01 -1.730079e-01 5.628364e-02 -2.502355e-02 -1.824743e-01 4.882824e-02 -1.934650e-02 -1.771032e-01 -2.872087e-02 1.890975e-01 -8.449018e-02 1.603982e-02 9.033757e-02 -6.586493e-02 1.008390e-02 -3.420342e-02 1.488317e-02 1.018826e-01 -3.083283e-01 6.181915e-01 -3.785813e-01 2.819157e-02 1.588590e-01 -1.348842e-01 7.531721e-02 2.644302e-01 -2.757833e-01 -9.234356e-02 6.001903e-03 4.491044e-02 -1.134158e-01 -2.753995e-04 1.162182e-01 6.200889e-02 -7.986766e-02 8.869834e-02 -2.299152e-01 1.028840e-01 5.569631e-02 4.088242e-03 -1.275329e-01 5.664017e-01 1.171227e-01 8.958655e-03 -8.355422e-02 -2.813435e-01 1.741941e-01 -2.097671e-01 -1.761151e-02 1.076005e-01 6.927103e-02 -1.985668e-01 1.729207e-01 6.671830e-03 9.589129e-02 -6.461612e-02 -2.069992e-02 -9.509310e-02 -8.580218e-03 3.301484e-01 4.174222e-02 -3.119829e-01 -9.169796e-02 -1.972451e-01 -6.950839e-02 2.112125e-01 -2.015889e-02 4.965603e-02 1.511902e-01 -2.186102e-01 3.034402e-02 7.227795e-02 1.778357e-01 2.430415e-01 -3.217318e-01 -2.166973e-02 -1.793155e-01 -2.141312e-01 -1.605927e-01 2.254289e-01 -7.036728e-02 -5.544611e-02 2.974730e-01 -9.973965e-02 -1.103673e-01 -1.044978e-02 2.289623e-01 2.631793e-01 -4.566360e-02 2.261929e-02 3.425892e-02 -2.372822e-01 -7.404512e-02 -1.559068e-01 -2.004807e-01 4.209306e-01 -2.025803e-02 1.419174e-01 5.674747e-02 -1.435100e-01 -8.279580e-02 -4.049034e-01 4.446330e-01 -3.648800e-01 4.218818e-02 1.410088e-01 1.470299e-01 2.198663e-02 -6.604751e-03 -7.566590e-02 -1.990165e-01 1.989366e-01 9.147952e-02 -2.645929e-02 -4.018433e-02 -1.685555e-02 3.287312e-02 2.685897e-02 2.114184e-02 -6.678830e-02 -3.848519e-02 -1.332520e-01 1.678024e-01 7.574033e-02 -7.478879e-02 4.586205e-01 -1.829181e-02 -2.599317e-02 -1.283649e-01 -2.082243e-01 3.834548e-02
  Number of Output Channels = 6
  Number of Input Channels = 32
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#12.Probability values -> Simple DSP - inverse => #13
  Equation = (x-0.5)*(-2)
LSL stim reader => #14
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
input0=#14, input1=#13 -> bias classifier adapt => #15
  Clock frequency (Hz) = 128
  Script = ${Player_ScenarioDirectory}/ov_bias_adapt_classifier.py
  Sampling frequency = 500
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
  Class Run start = OVTK_StimulationId_SegmentStart
  Class Run stop = OVTK_StimulationId_SegmentStop
  Performance data = ${Player_ScenarioDirectory}/run_perfs.cfg
  Class A collection = OVTK_StimulationId_Label_03
  Class B collection = OVTK_StimulationId_Label_04
-> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input 1=#2, Input 2=#15 -> Signal Merger => #18
#15 -> Channel Selector "biased classifier"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Crop => #20
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
Input signal=#20 -> LSL Export
  Signal stream = hyperplane
  Marker stream = openvibeMarkers
Input stimulations 1=#0.Stimulations, Input stimulations 2=#14 -> Stimulation multiplexer => #22
Input stream 1=#18, Input stream 2=#22 -> Identity => #23
Signal=#23.Output stream 1, Stimulation=#23.Output stream 2 -> 0xc73e83ec GDF file writer all
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-noadapt-[$core{date}-$core{time}].gdf
Data=#23.Output stream 1, Stimulations=#23.Output stream 2 -> 0xc73e83ec Signal display "online noadapt signal merged"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#2, Stimulation=#22 -> GDF file writer EEG
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-adapt-[$core{date}-$core{time}]_EEG.gdf
Signal=#15, Stimulation=#22 -> GDF file writer class
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-adapt-[$core{date}-$core{time}]_class.gdf
