OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)
Comment
  Testing LSL signals

Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Channel Selector "fake classifier" => #1
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
LSL stim reader => #3
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
Data=#0, Stimulations=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Stimulation listener
  Log level to use = Information
input0=#3, input1=#1 -> 0xc67a01dc bias classifier => #6
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/test/ov_bias_classifier.py
  Sampling frequency = 500
  Generated epoch sample count = 32
  Debug = true
  Class A start = OVTK_GDF_Left
  Class A stop = OVTK_GDF_Up
  Class B start = OVTK_GDF_Right
  Class B stop = OVTK_GDF_Down
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
